PsychoPy2experiment version="1.85.3"
Settings
  Monitor = testMonitor
  color = #A0A0A0
  Experiment info = {u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1280, 720]
  Full-screen window = True
  expName = pport_demo
  Screen = 1
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Routines
  Routine fixation
    TextComponent text_fixation
      text = +
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine target_1
    CodeComponent code_opacity
      Begin Routine:
        # write a message
        mylogger.write("begin routine")
      End Routine:
        mylogger.write("end of routine")
      End Experiment:
        mylogger.close()
      Each Frame:
        mylogger.write("frame update")
    TextComponent text_stim
      startVal [time (s)] = 0
      letterHeight = 0.1
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      text:
        target

        (press space)
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0
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  Routine instructions
    CodeComponent setup_parallel
      Begin Experiment:
        #Pull in kent library and set up Logger
        from kent_psylog import *
        mylogger = Logger(fname='.\logger.txt', timestamp=True)
    TextComponent text_1
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        this sample program is an example of how write log messages at runtime
        in a manner that does not significantly jeopardise your experiment
        timings due to disk activity.
        See the code block in the 'instructions' routine
    KeyboardComponent key_resp_1
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instructions
  LoopInitiator trials_study loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine fixation
    Routine target_1
  LoopTerminator trials_study
