PsychoPy2experiment version="1.85.3"
Settings
  Monitor = testMonitor
  color = #A0A0A0
  Experiment info = {u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1600, 1200]
  Full-screen window = True
  expName = pport_demo
  Screen = 1
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Routines
  Routine fixation
    TextComponent text_fixation
      text = +
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine target_1
    CodeComponent code_opacity
      Begin Routine:
        # At stimulus onset (when the window flips) this will send a PP trigger if we have a parallel port
        pp.fire(trigger=255)
      End Routine:
        pp.clear()
      Each Frame:
        # note this gets called once BEFORE sitmulus onset with frameN == 0
        # and then again after each monitor frame update
    TextComponent text_stim
      startVal [time (s)] = 0
      letterHeight = 0.1
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      text:
        target

        (press space)
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0
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  Routine instructions
    CodeComponent setup_parallel
      Begin Experiment:
        #Pull in kent library and set up PPTrigger
        from kent_psylib import *
        pp = PPTrigger(win,address=0xE010,status=True)
    TextComponent text_1
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        this sample program is an example of how to send parallel port triggers from CODE precisely itme-locked to stimulus onset.
        See the code block in the 'instructions' routine
    KeyboardComponent key_resp_1
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instructions
  LoopInitiator trials_study loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine fixation
    Routine target_1
  LoopTerminator trials_study
